CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:32
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<SlideSet>.*)-(?P<Tile>.*)\.(?P<Misc>.*)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (directory does contain "Good")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<SlideSet>.*)-(?P<Tile>.*)_(?P<Misc>.*)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (directory does contain "Probs") (file does contain "Prob")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Raw': u'SlideSet', u'Prob': u'SlideSet'}, {u'Raw': u'Tile', u'Prob': u'Tile'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "Good")
    Name to assign these images:Raw
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Prob")
    Name to assign these images:Prob
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Prob
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Nuc
    Convert green to gray?:Yes
    Name the output image:Fat
    Convert blue to gray?:Yes
    Name the output image:Tissue
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
ColorToGray:[module_num:6|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
    Select the input image:Raw
    Conversion method:Combine
    Image type:RGB
    Name the output image:RawGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
UnmixColors:[module_num:7|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
    Stain count:2
    Select the input color image:Raw
    Name the output image:Hematoxylin
    Stain:Hematoxylin
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    Name the output image:Eosin
    Stain:Eosin
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Nuc
    Name the primary objects to be identified:Nuc
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:5.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.3,1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Fat
    Name the primary objects to be identified:Background
    Typical diameter of objects, in pixel units (Min,Max):350,99999
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:750
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:0
    Lower and upper bounds on threshold:0.1,1.0
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Fat
    Name the primary objects to be identified:Large_Objects
    Typical diameter of objects, in pixel units (Min,Max):100,350
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:100
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:0
    Lower and upper bounds on threshold:0.1,1.0
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
MaskImage:[module_num:11|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
    Select the input image:Tissue
    Name the output image:TissMask
    Use objects or an image as a mask?:Objects
    Select object for mask:Background
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:TissMask
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):500,9999999
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0
    Threshold correction factor:0
    Lower and upper bounds on threshold:0.7,1.0
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
MaskImage:[module_num:13|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
    Select the input image:Fat
    Name the output image:MaskFat1
    Use objects or an image as a mask?:Objects
    Select object for mask:Background
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    Invert the mask?:Yes

MaskImage:[module_num:14|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
    Select the input image:Fat
    Name the output image:MaskFat2
    Use objects or an image as a mask?:Objects
    Select object for mask:Large_Objects
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:MaskFat2
    Name the primary objects to be identified:Target_Objects
    Typical diameter of objects, in pixel units (Min,Max):20,99
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:6
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.4,1.0
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
MeasureObjectSizeShape:[module_num:16|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
    Select objects to measure:Target_Objects
    Calculate the Zernike features?:No

FilterObjects:[module_num:17|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
    Select the objects to filter:Target_Objects
    Name the output objects:Fat_Droplets
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:Yes
    Maximum value:1

IdentifySecondaryObjects:[module_num:18|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
    Select the input objects:Fat_Droplets
    Name the objects to be identified:FatSecond
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Fat
    Number of pixels by which to expand the primary objects:30
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:19|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
    Select the input objects:Nuc
    Name the objects to be identified:NucSecond
    Select the method to identify the secondary objects:Propagation
    Select the input image:Eosin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyTertiaryObjects:[module_num:20|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
    Select the larger identified objects:FatSecond
    Select the smaller identified objects:Fat_Droplets
    Name the tertiary objects to be identified:FatRing
    Shrink smaller object prior to subtraction?:No

IdentifyTertiaryObjects:[module_num:21|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
    Select the larger identified objects:NucSecond
    Select the smaller identified objects:Nuc
    Name the tertiary objects to be identified:Cell
    Shrink smaller object prior to subtraction?:No

MeasureObjectSizeShape:[module_num:22|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
    Select objects to measure:Fat_Droplets
    Select objects to measure:Nuc
    Select objects to measure:Cell
    Select objects to measure:Tissue
    Calculate the Zernike features?:No

MeasureImageAreaOccupied:[module_num:23|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
    Hidden:7
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Fat_Droplets
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:FatRing
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nuc
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cell
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Tissue
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Background
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Large_Objects
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
MeasureObjectIntensity:[module_num:24|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
    Hidden:3
    Select an image to measure:RawGray
    Select an image to measure:Hematoxylin
    Select an image to measure:Eosin
    Select objects to measure:Fat_Droplets
    Select objects to measure:FatRing
    Select objects to measure:Nuc
    Select objects to measure:Cell
    Select objects to measure:Tissue

MeasureObjectIntensityDistribution:[module_num:25|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
    Hidden:3
    Hidden:5
    Hidden:2
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:RawGray
    Select an image to measure:Hematoxylin
    Select an image to measure:Eosin
    Select objects to measure:Fat_Droplets
    Object to use as center?:These objects
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    Select objects to measure:FatRing
    Object to use as center?:These objects
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    Select objects to measure:Nuc
    Object to use as center?:These objects
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    Select objects to measure:Cell
    Object to use as center?:These objects
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    Select objects to measure:Tissue
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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    Scale the bins?:Yes
    Number of bins:16
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
MeasureGranularity:[module_num:26|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
    Image count:1
    Object count:4
    Select an image to measure:RawGray
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Fat_Droplets
    Select objects to measure:FatRing
    Select objects to measure:Nuc
    Select objects to measure:Cell

MeasureTexture:[module_num:27|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
    Hidden:1
    Hidden:4
    Hidden:2
    Select an image to measure:RawGray
    Select objects to measure:Fat_Droplets
    Select objects to measure:FatRing
    Select objects to measure:Nuc
    Select objects to measure:Cell
    Texture scale to measure:3
    Texture scale to measure:10
    Measure images or objects?:Both

MeasureObjectNeighbors:[module_num:28|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
    Select objects to measure:Fat_Droplets
    Select neighboring objects to measure:Fat_Droplets
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ConvertObjectsToImage:[module_num:29|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
    Select the input objects:Fat_Droplets
    Name the output image:FatImage
    Select the color format:Color
    Select the colormap:Default

Tile:[module_num:30|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
    Select an input image:Raw
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:2
    Final number of columns:2
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:FatImage
    Select an additional image to tile:Prob
    Select an additional image to tile:MaskFat2

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Prob
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_tile
    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|Tiles
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:32|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\g<SlideSet>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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